PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'age': '', 'gender (F/M/NB)': '', 'handedness (L/R)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['sounds\\1.wav', 'sounds\\2.wav', 'sounds\\3.wav', 'sounds\\4.wav', 'sounds\\5.wav', 'sounds\\6.wav', 'sounds\\7.wav', 'sounds\\8.wav', 'sounds\\9.wav', 'sounds\\10.wav', 'sounds\\11.wav', 'sounds\\12.wav', 'sounds\\13.wav', 'sounds\\14.wav', 'sounds\\15.wav', 'sounds\\16.wav', 'sounds\\17.wav', 'sounds\\18.wav', 'sounds\\19.wav', 'sounds\\20.wav', 'sounds\\21.wav', 'sounds\\22.wav', 'sounds\\23.wav', 'sounds\\24.wav', 'sounds\\25.wav', 'sounds\\26.wav', 'sounds\\27.wav', 'sounds\\28.wav', 'sounds\\29.wav', 'sounds\\30.wav', 'sounds\\31.wav', 'sounds\\32.wav', 'sounds\\33.wav', 'sounds\\34.wav', 'sounds\\35.wav', 'sounds\\36.wav', 'sounds\\37.wav', 'sounds\\38.wav', 'sounds\\39.wav', 'sounds\\40.wav', 'sounds\\41.wav', 'sounds\\42.wav', 'sounds\\43.wav', 'sounds\\44.wav', 'sounds\\45.wav', 'sounds\\46.wav', 'sounds\\47.wav', 'sounds\\48.wav', 'sounds\\49.wav', 'sounds\\50.wav', 'distractor_folders\\bearteddy\\2bearteddy2.png', 'distractor_folders\\bearteddy\\2bearteddy3.png', 'distractor_folders\\bearteddy\\2bearteddy4.png', 'distractor_folders\\bearteddy\\2bearteddy5.png', 'distractor_folders\\bearteddy\\2bearteddy6.png', 'distractor_folders\\bearteddy\\2bearteddy7.png', 'distractor_folders\\bearteddy\\2bearteddy8.png', 'distractor_folders\\bearteddy\\2bearteddy9.png', 'distractor_folders\\bearteddy\\2bearteddy10.png', 'distractor_folders\\bearteddy\\2bearteddy11.png', 'distractor_folders\\bearteddy\\2bearteddy12.png', 'distractor_folders\\bearteddy\\2bearteddy13.png', 'distractor_folders\\bearteddy\\2bearteddy14.png', 'distractor_folders\\bearteddy\\2bearteddy15.png', 'distractor_folders\\bed\\3bed2.png', 'distractor_folders\\bed\\3bed3.png', 'distractor_folders\\bed\\3bed4.png', 'distractor_folders\\bed\\3bed5.png', 'distractor_folders\\bed\\3bed6.png', 'distractor_folders\\bed\\3bed7.png', 'distractor_folders\\bed\\3bed8.png', 'distractor_folders\\bed\\3bed9.png', 'distractor_folders\\bed\\3bed10.png', 'distractor_folders\\bed\\3bed11.png', 'distractor_folders\\bed\\3bed12.png', 'distractor_folders\\battery\\1battery2.png', 'distractor_folders\\battery\\1battery3.png', 'distractor_folders\\battery\\1battery4.png', 'distractor_folders\\battery\\1battery5.png', 'distractor_folders\\battery\\1battery6.png', 'distractor_folders\\battery\\1battery7.png', 'distractor_folders\\battery\\1battery8.png', 'distractor_folders\\battery\\1battery9.png', 'distractor_folders\\battery\\1battery10.png', 'distractor_folders\\battery\\1battery11.png', 'distractor_folders\\battery\\1battery12.png', 'distractor_folders\\basket\\2basket2.png', 'distractor_folders\\basket\\2basket3.png', 'distractor_folders\\basket\\2basket4.png', 'distractor_folders\\basket\\2basket5.png', 'distractor_folders\\basket\\2basket6.png', 'distractor_folders\\basket\\2basket7.png', 'distractor_folders\\basket\\2basket8.png', 'distractor_folders\\basket\\2basket9.png', 'distractor_folders\\basket\\2basket10.png', 'distractor_folders\\basket\\2basket11.png', 'distractor_folders\\basket\\2basket12.png', 'distractor_folders\\basket\\2basket13.png', 'distractor_folders\\basket\\2basket14.png', 'distractor_folders\\basket\\2basket15.png', 'distractor_folders\\barrel\\3barrel2.png', 'distractor_folders\\barrel\\3barrel3.png', 'distractor_folders\\barrel\\3barrel4.png', 'distractor_folders\\barrel\\3barrel5.png', 'distractor_folders\\barrel\\3barrel6.png', 'distractor_folders\\barrel\\3barrel7.png', 'distractor_folders\\barrel\\3barrel8.png', 'distractor_folders\\barrel\\3barrel9.png', 'distractor_folders\\barrel\\3barrel10.png', 'distractor_folders\\barrel\\3barrel11.png', 'distractor_folders\\barrel\\3barrel12.png', 'distractor_folders\\barbiedoll\\2barbiedoll2.png', 'distractor_folders\\barbiedoll\\2barbiedoll3.png', 'distractor_folders\\barbiedoll\\2barbiedoll4.png', 'distractor_folders\\barbiedoll\\2barbiedoll5.png', 'distractor_folders\\barbiedoll\\2barbiedoll6.png', 'distractor_folders\\barbiedoll\\2barbiedoll7.png', 'distractor_folders\\barbiedoll\\2barbiedoll8.png', 'distractor_folders\\barbiedoll\\2barbiedoll9.png', 'distractor_folders\\barbiedoll\\2barbiedoll10.png', 'distractor_folders\\barbiedoll\\2barbiedoll11.png', 'distractor_folders\\barbiedoll\\2barbiedoll12.png', 'distractor_folders\\barbiedoll\\2barbiedoll13.png', 'distractor_folders\\barbiedoll\\2barbiedoll14.png', 'distractor_folders\\balloon\\2balloon2.png', 'distractor_folders\\balloon\\2balloon3.png', 'distractor_folders\\balloon\\2balloon4.png', 'distractor_folders\\balloon\\2balloon5.png', 'distractor_folders\\balloon\\2balloon6.png', 'distractor_folders\\balloon\\2balloon7.png', 'distractor_folders\\balloon\\2balloon8.png', 'distractor_folders\\balloon\\2balloon9.png', 'distractor_folders\\balloon\\2balloon10.png', 'distractor_folders\\balloon\\2balloon11.png', 'distractor_folders\\balloon\\2balloon12.png', 'distractor_folders\\balloon\\2balloon13.png', 'distractor_folders\\balloon\\2balloon14.png', 'distractor_folders\\balloon\\2balloon15.png', 'distractor_folders\\ball\\2ball3.png', 'distractor_folders\\ball\\2ball4.png', 'distractor_folders\\ball\\2ball5.png', 'distractor_folders\\ball\\2ball6.png', 'distractor_folders\\ball\\2ball7.png', 'distractor_folders\\ball\\2ball8.png', 'distractor_folders\\ball\\2ball9.png', 'distractor_folders\\ball\\2ball10.png', 'distractor_folders\\ball\\2ball11.png', 'distractor_folders\\ball\\2ball12.png', 'distractor_folders\\ball\\2ball13.png', 'distractor_folders\\ball\\2ball14.png', 'distractor_folders\\ball\\2ball15.png', 'distractor_folders\\babycarriage\\3babycarriage2.png', 'distractor_folders\\babycarriage\\3babycarriage3.png', 'distractor_folders\\babycarriage\\3babycarriage4.png', 'distractor_folders\\babycarriage\\3babycarriage5.png', 'distractor_folders\\babycarriage\\3babycarriage6.png', 'distractor_folders\\babycarriage\\3babycarriage7.png', 'distractor_folders\\babycarriage\\3babycarriage8.png', 'distractor_folders\\babycarriage\\3babycarriage9.png', 'distractor_folders\\babycarriage\\3babycarriage10.png', 'distractor_folders\\babycarriage\\3babycarriage11.png', 'distractor_folders\\babycarriage\\3babycarriage12.png', 'distractor_folders\\armyguy\\1armyguy2.png', 'distractor_folders\\armyguy\\1armyguy3.png', 'distractor_folders\\armyguy\\1armyguy4.png', 'distractor_folders\\armyguy\\1armyguy5.png', 'distractor_folders\\armyguy\\1armyguy6.png', 'distractor_folders\\armyguy\\1armyguy7.png', 'distractor_folders\\armyguy\\1armyguy8.png', 'distractor_folders\\armyguy\\1armyguy9.png', 'distractor_folders\\armyguy\\1armyguy10.png', 'distractor_folders\\armyguy\\1armyguy11.png', 'distractor_folders\\armyguy\\1armyguy12.png', 'distractor_folders\\arch\\3arch2.png', 'distractor_folders\\arch\\3arch3.png', 'distractor_folders\\arch\\3arch4.png', 'distractor_folders\\arch\\3arch5.png', 'distractor_folders\\arch\\3arch6.png', 'distractor_folders\\arch\\3arch7.png', 'distractor_folders\\arch\\3arch8.png', 'distractor_folders\\arch\\3arch9.png', 'distractor_folders\\arch\\3arch10.png', 'distractor_folders\\arch\\3arch11.png', 'distractor_folders\\arch\\3arch12.png', 'distractor_folders\\accordian\\2accordian2.png', 'distractor_folders\\accordian\\2accordian3.png', 'distractor_folders\\accordian\\2accordian4.png', 'distractor_folders\\accordian\\2accordian5.png', 'distractor_folders\\accordian\\2accordian6.png', 'distractor_folders\\accordian\\2accordian7.png', 'distractor_folders\\accordian\\2accordian8.png', 'distractor_folders\\abacus\\2abacus2.png', 'distractor_folders\\abacus\\2abacus3.png', 'distractor_folders\\abacus\\2abacus4.png', 'distractor_folders\\abacus\\2abacus5.png', 'distractor_folders\\abacus\\2abacus6.png', 'distractor_folders\\abacus\\2abacus7.png', 'distractor_folders\\abacus\\2abacus8.png', 'distractor_folders\\abacus\\2abacus9.png', 'distractor_folders\\abacus\\2abacus10.png', '0.xlsx', '1.png', '1.xlsx', '1_concon.xlsx', '2.png', '2.xlsx', '2_concon.xlsx', '3.png', '3.xlsx', '4.png', '4.xlsx', '5.png', '5.xlsx', '6.xlsx', '7.xlsx', '8.xlsx', '9.xlsx', '10.png', '10.xlsx', '11.xlsx', '12.xlsx', '13.xlsx', '14.xlsx', '15.xlsx', '16.xlsx', '17.xlsx', '18.xlsx', '19.xlsx', '20.xlsx', '21.xlsx', '22.xlsx', '23.xlsx', '24.xlsx', '25.xlsx', '26.xlsx', '27.xlsx', '28.xlsx', '29.xlsx', '30.xlsx', '31.xlsx', '32.xlsx', '33.xlsx', '34.xlsx', '35.xlsx', '36.xlsx', '37.xlsx', '38.xlsx', '39.xlsx', 'a_even.png', 'a_even2.png', 'all_exp.xlsx', 'dp_a_left.png', 'dp_s_left.png', 'icon_correct.png', 'icon_missed.png', 'icon_wrong.png', 'reps.xlsx', 's_even.png', 's_even2.png', 'sp_a_even.png', 'sp_s_even.png', 'objects\\0.64_5.8_obj_3444.png', 'objects\\0.65_5.6_obj_3688.png', 'objects\\0.67_6.4_obj_0146.png', 'objects\\0.74_ringbox03.png', 'objects\\1ABABYPIN2.png', 'objects\\1ABPIECE2.png', 'objects\\1ACIGCUTT.png', 'objects\\1Acliplatch.png', 'objects\\1ACOCONUT2.png', 'objects\\1Acompactdisc2.png', 'objects\\1Acork6.png', 'objects\\1Acroissant.png', 'objects\\1Afaucet9.png', 'objects\\1AHANDPRE3.png', 'objects\\1AHARMONS2.png', 'objects\\1Anetworkplug4.png', 'objects\\1Apeanut3.png', 'objects\\1APICKLE.png', 'objects\\1ARECEIPT.png', 'objects\\1armyguy1.png', 'objects\\1Athimble2.png', 'objects\\1Atoyball.png', 'objects\\1Atoyboat10.png', 'objects\\1badge1.png', 'objects\\1battery1.png', 'objects\\1bill1.png', 'objects\\1bird1.png', 'objects\\1bowtie1.png', 'objects\\1butterfly1.png', 'objects\\1button1.png', 'objects\\1candybar1.png', 'objects\\1carabiners1.png', 'objects\\1cassettetape1.png', 'objects\\1cellphone1.png', 'objects\\1chesshorse1.png', 'objects\\1christmastreeornamantball1.png', 'objects\\1clothespin1.png', 'objects\\1coin1.png', 'objects\\1compass1.png', 'objects\\1computermouse1.png', 'objects\\1cookie1.png', 'objects\\1creditcard1.png', 'objects\\1cupcake1.png', 'objects\\1dartpin1.png', 'objects\\1dice1.png', 'objects\\1donut1.png', 'objects\\1doorknob1.png', 'objects\\1doorknocker1.png', 'objects\\1easteregg_redo1.png', 'objects\\1eraser1.png', 'objects\\1feather1.png', 'objects\\1fishhook1.png', 'objects\\1flask1.png', 'objects\\1fork1.png', 'objects\\1giftbow1.png', 'objects\\1glove1.png', 'objects\\1golfball1.png', 'objects\\1haircomb1.png', 'objects\\1icecreamcones1.png', 'objects\\1key1.png', 'objects\\1keychain1.png', 'objects\\1leatherman1.png', 'objects\\1leaves1.png', 'objects\\1legoman1.png', 'objects\\1lighter1.png', 'objects\\1lightswitch1.png', 'objects\\1lipstick1.png', 'objects\\1lock1.png', 'objects\\1mathcompass1.png', 'objects\\1mp3player1.png', 'objects\\1mushroom1.png', 'objects\\1nailfile1.png', 'objects\\1nailpolish1.png', 'objects\\1necklace1.png', 'objects\\1pacifier1.png', 'objects\\1paint1.png', 'objects\\1parfumebottle9.png', 'objects\\1pen1.png', 'objects\\1pencilsharpener1.png', 'objects\\1pipe1.png', 'objects\\1pokercard12.png', 'objects\\1postit3.png', 'objects\\1ring1.png', 'objects\\1rubberduck1.png', 'objects\\1ruler1.png', 'objects\\1scrunchie1.png', 'objects\\1seashell1.png', 'objects\\1skrewdriver1.png', 'objects\\1stapler1.png', 'objects\\1tape1.png', 'objects\\1tissuepack1.png', 'objects\\1usb1.png', 'objects\\1watch1.png', 'objects\\1webcam1.png', 'objects\\2abacus1.png', 'objects\\2accordian1.png', 'objects\\2ball2.png', 'objects\\2balloon1.png', 'objects\\2barbiedoll1.png', 'objects\\2basket1.png', 'objects\\2bearteddy1.png', 'objects\\2beermug1.png', 'objects\\2birdhouse1.png', 'objects\\2boardgame1.png', 'objects\\2bongo1.png', 'objects\\2bonzai1.png', 'objects\\2boot1.png', 'objects\\2bucket1.png', 'objects\\2cashregister1.png', 'objects\\2cat1.png', 'objects\\2coffeemaker1.png', 'objects\\2cookingpan1.png', 'objects\\2cookpot1.png', 'objects\\2cooler1.png', 'objects\\2corset1.png', 'objects\\2crown1.png', 'objects\\2cushion1.png', 'objects\\2dollhouse1.png', 'objects\\2flashlight1.png', 'objects\\2frisbee1.png', 'objects\\2gift1.png', 'objects\\2hairdryer1.png', 'objects\\2hammer1.png', 'objects\\2handbag1.png', 'objects\\2kettle1.png', 'objects\\2laundrybasket1.png', 'objects\\2robot1.png', 'objects\\2typewriter1.png', 'objects\\3ambulance_22.png', 'objects\\3anchor3.png', 'objects\\3arch1.png', 'objects\\3babycarriage1.png', 'objects\\3balloon2.png', 'objects\\3barrel1.png', 'objects\\3bed1.png', 'objects\\3bench1.png', 'objects\\3bumpercar1.png', 'objects\\3chair1.png', 'objects\\3chaise1.png', 'objects\\3chest1.png', 'objects\\3clotheshorse1.png', 'objects\\3coatrack1.png', 'objects\\3coffin1.png', 'objects\\3couch1.png', 'objects\\3crib1.png', 'objects\\3desk1.png', 'objects\\3dishwasher1.png', 'objects\\3drawer1.png', 'objects\\3drumset1.png', 'objects\\3elephant1.png', 'objects\\3fishingpole1.png', 'objects\\3fitnessbench1.png', 'objects\\3fitnessbike1.png', 'objects\\3fittingroom1.png', 'objects\\3forklift1.png', 'objects\\3fridge1.png', 'objects\\3garbagecan1.png', 'objects\\3gardenswing1.png', 'objects\\3gorilla1.png', 'objects\\3hammock1.png', 'objects\\3helicopter1.png', 'objects\\3horse1.png', 'objects\\3kayak1.png', 'objects\\3ladder1.png', 'objects\\3lambader1.png', 'objects\\3langırt1.png', 'objects\\3lawnmover1.png', 'objects\\3manken1.png', 'objects\\3mattress1.png', 'objects\\3motorcycle1.png', 'objects\\3piano1.png', 'objects\\3picnictable1.png', 'objects\\3punchingbag1.png', 'objects\\3rug1.png', 'objects\\3sculpture1.png', 'objects\\3shade1.png', 'objects\\3shoppingcar.png', 'objects\\3showercabin1.png', 'objects\\3telescope1.png', 'objects\\3tent1.png', 'objects\\3tractor1.png', 'objects\\3treadmill1.png', 'objects\\3tree1.png', 'objects\\3tricycle1.png', 'objects\\3vantilator1.png', 'objects\\3vendingmachine1.png', 'objects\\3washer1.png', 'objects\\3wheelbarrow1.png', 'objects\\3wheelchair1.png', 'objects\\3xray1.png', 'objects\\3xylophone1.png', 'objects\\122883664.thl.png', 'objects\\122919600.thl.png', 'objects\\126375702.thl.png', 'objects\\126376346.thl.png', 'objects\\A_razor.png', 'objects\\A_teabag.png', 'objects\\A3leafcl4.png', 'objects\\A70ssunglass3.png', 'objects\\AAGSPOON2.png', 'objects\\Aantelope2.png', 'objects\\AANTICUP4.png', 'objects\\ABADBIRDY.png', 'objects\\Abrooch94.png', 'objects\\Acamel3.png', 'objects\\Acdrom4.png', 'objects\\ACOW6.png', 'objects\\Adolphin3.png', 'objects\\AFOUNTAI5.png', 'objects\\airhocckytable.png', 'objects\\Akitchenisla4.png', 'objects\\Alemon11.png', 'objects\\Anailscissors.png', 'objects\\Anectarine.png', 'objects\\Apaperclip3.png', 'objects\\aquarium.png', 'objects\\ASERVICEB.png', 'objects\\Aspoolofthre6.png', 'objects\\Atennisball2.png', 'objects\\Atomato12.png', 'objects\\B_pear.png', 'objects\\bear1.png', 'objects\\clock1.png', 'objects\\firetruck.png', 'objects\\gong1.png', 'objects\\hotdogstand.png', 'objects\\knife01.png', 'objects\\mirror1.png', 'objects\\oven.png', 'objects\\podium1.png', 'objects\\popcornmachine.png', 'objects\\schoolbus.png', 'objects\\skydive1.png', 'objects\\sleigh.png', 'objects\\tank1.png', 'objects\\tombstone.png', 'objects\\tower.png', 'objects\\trailer1.png', 'objects\\van.png', 'objects\\windsurf.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = ltm-pre-att-v41
  logging level = debug
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Routines
  Routine beginning
    TextComponent Exp_beginning
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        In the next pages you will see the instructions.
        Please read them carefully.
        You will not have a chance to return…


        Press space to continue
    KeyboardComponent key_resp
      allowedKeys = 'space',
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_35
      Code Type = Both
      Begin Experiment:
        #conditions_file = str(int(expInfo['participant']) % 20) + '.xlsx'
        #conditions_file = ((Number.parseInt(expInfo["participant"]) % 20).toString() + ".xlsx");



        object_size= (0.15,0.15)
  Routine show_images
    PolygonComponent polygon_outside
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 100
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    PolygonComponent polygon_inside
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 100
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent Stim_image
      image [set every repeat] = $objects_new
      ori [set every repeat] = orientation_array
      pos [set every repeat] = (objects_location_x,objects_location_y)
      size = object_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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  Routine blank500ms
    TextComponent fixation
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent instr
      letterHeight = 0.05
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Type the answer below, and press enter
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text.text = "";
        event=psychoJS.eventManager;
        event.clearEvents("keyboard");
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        keys = event.getKeys();
        if (keys.length) {
            if (_pj.in_es6("space", keys)) {
                text.text = (text.text + " ");
            } else {
                if (_pj.in_es6("backspace", keys)) {
                    text.text = text.text.slice(0, (- 1));
                } else {
                    if ((_pj.in_es6("lshift", keys) || _pj.in_es6("rshift", keys))) {
                        modify = true;
                    } else {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                            if (modify) {
                                text.text = (text.text + keys[0].upper());
                                modify = false;
                            } else {
                                text.text = (text.text + keys[0]);
                            }
                        }
                    }
                }
            }
        }
      End JS Routine:
        thisExp=psychoJS.experiment;
        thisExp.addData("typedWord", text.text);
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine text_Prompt
    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        if not countdownStarted:
            countdownClock = core.CountdownTimer(15) # 300 s = 5 minutes
            countdownStarted = True
      Each Frame:
        timeRemaining = countdownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False # end this trial immediately
            trials_loop.finished = True # and terminate the loop (use its actual name)
            countdownStarted = False # only necessary if you'll be using the countdown again elsewhere
    TextComponent filler1
      letterHeight = 0.05
      pos = (-0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        Calculate:
    TextComponent targetText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $calc
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  Routine ITI
    TextComponent text_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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      text:
        +
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  Routine ret_dist_test
    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
        event=psychoJS.eventManager;
        event.clearEvents();
      Begin Routine:
        win.mouseVisible = True
        mouse_7.setPos(newPos=(0, 0))
    PolygonComponent polygon_outside5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_inside5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 99
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text_19
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    MouseComponent mouse_7
      clickable = polygon_outside5,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = True
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
  Routine blocking
    TextComponent text_20
      letterHeight = 0.05
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        block completed
        press space to continue
    CodeComponent code_49
      Code Type = Both
      Begin Experiment:
        block_acc=0;
        mean_degree=0;
        sound_mean=0;
        dist_mean=0;
        degree_soundT=0;
        degree_distT=0;
        block_count=0
        msg= "";
        msg2="";
        msg3="";
        count_blocks= 0;
      Begin JS Experiment:
        block_acc=0;
        mean_degree=0;
        sound_mean=0;
        dist_mean=0;
        degree_soundT=0;
        degree_distT=0;
        sum = (arr) => arr.reduce((a,b)=>a+b);
        msg= "";
        msg2="";
        msg3="";
        block_count=0;
      Begin JS Routine:
        block_acc = (sound_acc + dist_acc);
        count_blocks=count_blocks+1;
        msg = "You got " + block_acc + " out of 4 trials correct for the distractor tasks !";
        msg2 = "You got " + degree_accuracy + " out of 6 trials correct (less than 20 degrees) for the main task !";
        msg3 = "You have completed " + (block_count+1) + " blocks out of 80";
      Begin Routine:
        block_acc= dist_acc
        count_blocks=count_blocks+1;




        msg = "You got " + str(block_acc) + " out of 3 trials correct for the star task !";
        msg2 = "You got " + str(degree_accuracy) + " out of 6 trials correct (less than 20 degrees) for the location task !";
        msg3 = "You have completed " + str(block_count+1) + " blocks out of 60";
      End JS Routine:
        block_count=block_count+1;
      End Routine:
        block_count=block_count+1
        thisExp.addData("block_acc", block_acc);
    TextComponent text_39
      letterHeight = 0.03
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent key_resp_11
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_41
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg2
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    TextComponent num_of_blocks
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $msg3
  Routine dist_feedback
    PolygonComponent polygon_out5
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent polygon_in5
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 999
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_19
      Code Type = Both
      Begin Experiment:
        degree_distT=0;
        degree_difference_distNA=0;
      Begin JS Experiment:
        degree_distT = 0;
        degree_difference_distNA = 0;
      Begin JS Routine:
        m= _mouseXYs[0];
        n= _mouseXYs[1];
        resp_degree_v = ((Math.atan2(m, n) / Math.PI) * 180);
        actual_degree_v = ((Math.atan2(objects_location_x, objects_location_y) / Math.PI) * 180);
        degree_difference = Math.round((resp_degree_v - actual_degree_v));
        degree_difference_distNA = degree_difference;
        degree_difference = Math.abs(degree_difference);
        if (polygon_25.contains(mouse_7)) {
            degree_difference = "Click on the wheel";
            degree_distT=degree_difference;
            degree_accuracy = degree_accuracy;
            } else {
        if ((degree_difference > 180)) {
            degree_difference = Math.round((360 - degree_difference));
            degree_distT=degree_difference
        } else {
            degree_difference = Math.round(degree_difference);
            degree_distT=degree_difference
        }
        if (((mouse_7.getPressed()[0]) === 0)) {
            degree_difference = "Too late";
            degree_distT=degree_difference
            degree_accuracy = degree_accuracy;
        } else {
            if ((degree_difference > 20)) {
                degree_accuracy = degree_accuracy;
                degree_distT=degree_difference
                degree_difference = (degree_difference.toString() + "\u00b0");
            } else {
                degree_accuracy = (degree_accuracy + 1);
                degree_distT=degree_difference
                degree_difference = (degree_difference.toString() + "\u00b0");
            }
        }
        }
      Begin Routine:
        import math

        m,n = mouse_7.getPos()
        resp_degree_v = math.atan2(m,n)/math.pi*180
        actual_degree_v = math.atan2(objects_location_x,objects_location_y)/math.pi*180
        degree_difference = round((resp_degree_v - actual_degree_v))
        degree_difference_distNA=degree_difference
        degree_difference = abs(degree_difference)
        #msg = str(x) + "\n" + str(y) + "\n" + str(resp_degree) + "\n" + str(actual_degree) + "\n" + str(degree_difference)


        if (degree_difference >180):
            degree_difference=round(360 - degree_difference)
        else:
            degree_difference=round(degree_difference)

        if int(mouse_7.getPressed()[0])==0 :
            degree_difference= "Too late"
            degree_distT=degree_difference
            degree_accuracy=degree_accuracy

        elif degree_difference>20:
            degree_accuracy=degree_accuracy
            degree_distT=degree_difference
            degree_difference= str(degree_difference) + '°'

        else:
            degree_accuracy=degree_accuracy +1
            degree_distT=degree_difference
            degree_difference= str(degree_difference) + '°'
      End JS Routine:
        thisExp=psychoJS.experiment;
        thisExp.addData("degree_difference_distT", degree_distT);
        thisExp.addData('degree_difference_distNA', degree_difference_distNA)
        thisExp.addData("degree_accuracy", degree_accuracy);
        thisExp.addData("degree_accuracy", degree_accuracy);
        thisExp.addData("resp_degree_v", resp_degree_v);
        thisExp.addData("actual_degree_v", actual_degree_v);
      End Routine:
        thisExp.addData("degree_difference_distT", degree_distT);
        thisExp.addData('degree_difference_distNA', degree_difference_distNA)
        thisExp.addData("degree_accuracy", degree_accuracy);

        thisExp.addData("resp_degree_v", resp_degree_v);
        thisExp.addData("actual_degree_v", actual_degree_v);
    PolygonComponent polygon_5
      fillColor = $[1,1,1]
      nVertices = 99
      pos [set every repeat] = $(m, n)
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_18
      image [set every repeat] = $objects_new
      ori [set every repeat] = orientation_array
      pos [set every repeat] = (objects_location_x, objects_location_y)
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    PolygonComponent polygon_14
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 99
      pos [set every repeat] = $(objects_location_x, objects_location_y)
      shape = regular polygon...
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $degree_difference
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  Routine baseline
    PolygonComponent polygon_out_base
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    PolygonComponent polygon_in_base
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 999
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
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    ImageComponent ret_cue_base
      image [set every repeat] = $objects_new
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent fixation_base
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      text = +
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    CodeComponent code_31
      Code Type = Both
      Begin JS Experiment:
        var dist7;
        var dist8;
        var dist9;
        var dist10;
        var dist11;
        var dist12;
        var dist_location_x;
        var dist_location_y;
        var base_rep;
        var dist_all_rep;
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible= False
  Routine baseline_ret_test
    CodeComponent code_32
      Code Type = Both
      Begin JS Routine:
        document.body.style.cursor='auto';
      Begin Routine:
        win.mouseVisible= True
        mouse_base.setPos(newPos=(0, 0))
    PolygonComponent polygon_out_base_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_in_base_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 99
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent fix2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    MouseComponent mouse_base
      clickable = polygon_out_base_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      syncScreenRefresh = True
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  Routine feedback_baseline
    PolygonComponent pol_out_2
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    PolygonComponent pol_in_2
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 999
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent cod_2
      Code Type = Both
      Begin JS Experiment:
        degree_baseT=0;
        degree_difference_baseNA=0;
        degree_difference_soundNA=0;
        degree_difference_distNA=0;
      Begin JS Routine:
        _mouseXYs = mouse_base.getPos();
        f = _mouseXYs[0]
        g= _mouseXYs[1]
        resp_degree_b = ((Math.atan2(f, g) / Math.PI) * 180);
        actual_degree_b = ((Math.atan2(objects_location_x,objects_location_y) / Math.PI) * 180);
        degree_difference = Math.round((resp_degree_b - actual_degree_b));
        degree_difference_baseNA = degree_difference;
        degree_difference = Math.abs(degree_difference);

        if (polygon_26.contains(mouse_base)) {
            degree_difference = "Click on the wheel"
            degree_baseT=degree_difference
            degree_accuracy = degree_accuracy;
            } else {
        if ((degree_difference > 180)) {
            degree_difference = Math.round((360 - degree_difference));
            degree_baseT=degree_difference
        } else {
                degree_difference = Math.round(degree_difference);
                degree_baseT=degree_difference
        }
        if ((mouse_base.getPressed()[0] === 0)) {
            degree_difference = "Too late";
            degree_baseT=degree_difference
            degree_accuracy = degree_accuracy;
        } else {
            if ((degree_difference > 20)) {
                degree_accuracy = degree_accuracy;
               degree_baseT=degree_difference
                degree_difference = (degree_difference.toString() + "\u00b0");
            } else {
                degree_accuracy = (degree_accuracy + 1);
                degree_baseT=degree_difference
                degree_difference = (degree_difference.toString() + "\u00b0");
            }
        }
        }
      Begin Routine:
        import math

        f,g = mouse_base.getPos()
        resp_degree_b = math.atan2(f,g)/math.pi*180
        actual_degree_b = math.atan2(objects_location_x,objects_location_y)/math.pi*180
        degree_difference = round((resp_degree_b - actual_degree_b))
        degree_difference_baseNA=degree_difference
        degree_difference = abs(degree_difference)

        #msg = str(f) + "\n" + str(g) + "\n" + str(resp_degree) + "\n" + str(actual_degree) + "\n" + str(degree_difference)
        if (degree_difference >180):
            degree_difference=round(360 - degree_difference)
            degree_baseT=degree_difference
        else:
            degree_difference=round(degree_difference)
            degree_baseT=degree_difference


        if mouse_base.getPressed()[0]==0 :
            degree_difference= "Too late"
            degree_accuracy=degree_accuracy

        elif degree_difference>20:
            degree_accuracy=degree_accuracy
            degree_difference= str(degree_difference) + '°'
        else:
            degree_accuracy=degree_accuracy +1
            degree_difference= str(degree_difference) + '°'
      End JS Routine:
        thisExp=psychoJS.experiment;
        thisExp.addData("degree_difference_baseT", degree_baseT);
        thisExp.addData('degree_difference_baseNA', degree_difference_baseNA)
        thisExp.addData("degree_accuracy", degree_accuracy);
        thisExp.addData("resp_degree_b", resp_degree_b);
        thisExp.addData("actual_degree_b", actual_degree_b);
      End Routine:
        thisExp.addData("degree_difference_baseT", degree_baseT);
        thisExp.addData('degree_difference_baseNA', degree_difference_baseNA)
        thisExp.addData("degree_accuracy", degree_accuracy);
        thisExp.addData("resp_degree_b", resp_degree_b);
        thisExp.addData("actual_degree_b", actual_degree_b);
    PolygonComponent pol2_2
      fillColor = $[1,1,1]
      nVertices = 99
      pos [set every repeat] = $(f, g)
      shape = regular polygon...
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_16
      image [set every repeat] = $objects_new
      ori [set every repeat] = orientation_array
      pos [set every repeat] = (objects_location_x, objects_location_y)
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    PolygonComponent polygon_12
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 999
      pos [set every repeat] = $(objects_location_x, objects_location_y)
      shape = regular polygon...
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent txtp_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text [set every repeat]:
        $degree_difference
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
  Routine informed_consent
    CodeComponent code_par_no
      Code Type = Auto->JS
      Begin Experiment:
        par_file =  'par' + str(expInfo["participant"]) + '_'
        par_no = int(str(expInfo["participant"]))
        for cond_file in os.scandir('condition_files'):
            if cond_file.name.startswith(par_file):
                cur_cond = os.path.join('condition_files',cond_file.name, 'all_exp.xlsx')
                print(cur_cond)
                break
    TextComponent inf_constent
      color = black
      letterHeight = 0.021
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        INFORMED CONSENT

        The purpose of this study is to investigate attention and memory. With this study,
        we hope to gain a better understanding of how human memory and attention systems
        function.

        We will ask you to complete a demographics questionnaire (e.g., age, gender,
        years of education, handedness). Then you will receive instructions regarding the task
        which you will perform on your computer. The task involves the presentation of some
        stimuli that you will need to attend to and/or remember. The study will take 45 to 120
        minutes. When the task is completed you will receive a debriefing about the study. Your
        data will be shared with the public to communicate the results of the study. However, the
        data we share with the public will not have your name on it. We will not share any
        information that would allow people to identify your identity.

        There are no risks associated with this study. You might experience tired eyes due to
        looking at the computer screen for an extended duration.

        Participants will gain experience in experimental psychology. Moreover, they can
        earn course credits at Sabancı University in participating classes.

        This study will take 45 to 120 minutes. Your participation is entirely voluntary.
        You can stop the session at any point if you desire without any penalty. You will be
        receiving one research point per 30 minutes of participation from the SONA System for
        your participation. There will be no monetary compensation.

        If you have questions or concerns about the study, please contact Dr. Eren Günseli at
        eren.gunseli@sabanciuniv.edu.  If you believe that your rights have been violated in any
        way, please contact Mehmet Yıldız, Chair of Sabancı University Research ethics Council at
        (216) 300-1301 or by email at mehmet.yildiz@sabanciuniv.edu.
    TextComponent text_6
      letterHeight = 0.02
      pos = (0.4, -0.43)
      startVal [time (s)] = 0.0
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      text:
        By clicking on this box, you are indicating your consent to participate in this study.
    PolygonComponent polygon_3
      fillColor = $[0,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (0.5, -0.45)
      shape = rectangle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_9
      clickable = polygon_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
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  Routine Lets_start
    TextComponent text_31
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Press space to continue when you are ready…
    KeyboardComponent key_resp_12
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_calculation
    TextComponent text_calc
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the calculation block:

        You will see simple mathematical problems

        Try to respond as accurately as possible

        Type your answer using the keyboard and press enter.





        Press space to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_22
      image = 3.png
      size = [1220,760]
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    CodeComponent counter_calc
      Code Type = Both
      Begin Experiment:
        counter_calc=0
      Begin JS Experiment:
        counter_calc = 0;
      Begin Routine:
        if counter_calc >= 2:
            continueRoutine=False
      End Routine:
        counter_calc=counter_calc+1
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  Routine real_test
    TextComponent real
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now, it’s time for the test!

        Press space to continue…
    KeyboardComponent key_resp_14
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dist_imgs
    CodeComponent code_mouse_visible
      Code Type = Both
      Begin JS Experiment:
        psychoJS.window.mouseVisible = false;
        var dist7;
        var dist8;
        var dist9;
        var dist10;
        var dist11;
        var dist12;
        var dist_location_x;
        var dist_location_y;
      Begin JS Routine:
        document.body.style.cursor='none';
      Begin Routine:
        win.mouseVisible = False
    ImageComponent ret_dist_target
      image [set every repeat] = $objects_new
      size = [0.15,0.15]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent txt6_2
      letterHeight = 0.03
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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      text:
        +
    PolygonComponent polygon_out4_3
      fillColor = $[-1,-1,-1]
      lineColor = $[-1,-1,-1]
      nVertices = 999
      opacity = 0.5
      shape = regular polygon...
      size = (0.82, 0.82)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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    PolygonComponent polygon_in4_3
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 999
      shape = regular polygon...
      size = (0.78, 0.78)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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    ImageComponent dist_img1_2
      image [set every repeat] = $dist1
      pos [set every repeat] = (0.4,0)
      size = (0.1,0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img2_2
      image [set every repeat] = $dist2
      pos [set every repeat] = (-0.4,0)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img3_2
      image [set every repeat] = $dist3
      pos [set every repeat] = (0.18, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img4_2
      image [set every repeat] = $dist4
      pos [set every repeat] = (-0.18, -0.35)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img5_2
      image [set every repeat] = $dist5
      pos [set every repeat] = (-0.35, 0.18)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img6_2
      image [set every repeat] = $dist6
      pos [set every repeat] = (0.35, 0.18)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img7_2
      image [set every repeat] = $dist7
      pos = (-0.28, -0.28)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img8_2
      image [set every repeat] = $dist8
      pos = (0.28, -0.28)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img9_2
      image [set every repeat] = $dist9
      pos = (-0.37, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img10_2
      image [set every repeat] = $dist10
      pos = (0.37, -0.15)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img11_2
      image [set every repeat] = $dist11
      pos = (-0.23, 0.32)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    ImageComponent dist_img12_2
      image [set every repeat] = $dist0
      pos = (0.23, 0.32)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
      texture resolution = 512
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    PolygonComponent polygon_star_2
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      lineWidth = 2
      pos [set every repeat] = [dist_location_x,dist_location_y]
      shape = star
      size = (0.1, 0.1)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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  Routine dist_real_feedback
    CodeComponent code_46
      Code Type = Both
      Begin Experiment:
        image_file = ['icon_correct.png',
                                'icon_wrong.png',
                                'icon_missed.png']
        dist_acc=0
      Begin JS Experiment:
        image_file = ["icon_correct.png", "icon_wrong.png", "icon_missed.png"];
        dist_acc = 0;
      Begin JS Routine:
        if ((! key_resp_dist.keys)) {
            feedback_image = image_file[2];
        } else {
            if ((key_resp_dist.keys === correct_ans_dist.toString())) {
                feedback_image = image_file[0];
                dist_acc = (dist_acc + 1);
            } else {
                feedback_image = image_file[1];
            }
        }
      Begin Routine:
        if not key_resp_dist.keys:
            feedback_image = image_file[2]
        elif key_resp_dist.keys==str(correct_ans_dist):
            feedback_image = image_file[0]
            dist_acc=dist_acc+1
        else:
            feedback_image = image_file[1]
      End JS Routine:
        thisExp=psychoJS.experiment;
        thisExp.addData("key_distT", dist_acc);
      End Routine:
        thisExp.addData("key_distT", dist_acc);
    ImageComponent image_14
      image [set every repeat] = $feedback_image
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine dist_test
    TextComponent text_38
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Press A or S
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    KeyboardComponent key_resp_dist
      allowedKeys = 'a','s',
      correctAns = $correct_ans_dist
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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
  Routine accuracy_resett
    CodeComponent code_55
      Code Type = Both
      Begin JS Routine:
        sound_acc = 0;
        dist_acc = 0;
        degree_accuracy = 0;
        count_blocks=0;
      Begin Routine:
        sound_acc=0;
        dist_acc=0;
        degree_accuracy=0;
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  Routine blank200
    TextComponent fixation_3
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine informed_consent
  Routine beginning
  Routine instructions_calculation
  Routine Lets_start
  LoopInitiator experimental_block loopType="TrialHandler"
    conditionsFile = all_exp.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{'conditions_file': '0.xlsx'},
      {'conditions_file': '1.xlsx'},
      {'conditions_file': '2.xlsx'},
      {'conditions_file': '3.xlsx'},
      {'conditions_file': '4.xlsx'},
      {'conditions_file': '5.xlsx'},
      {'conditions_file': '6.xlsx'},
      {'conditions_file': '7.xlsx'},
      {'conditions_file': '8.xlsx'},
      {'conditions_file': '9.xlsx'},
      {'conditions_file': '10.xlsx'},
      {'conditions_file': '11.xlsx'},
      {'conditions_file': '12.xlsx'},
      {'conditions_file': '13.xlsx'},
      {'conditions_file': '14.xlsx'},
      {'conditions_file': '15.xlsx'},
      {'conditions_file': '16.xlsx'},
      {'conditions_file': '17.xlsx'},
      {'conditions_file': '18.xlsx'},
      {'conditions_file': '19.xlsx'},
      {'conditions_file': '20.xlsx'},
      {'conditions_file': '21.xlsx'},
      {'conditions_file': '22.xlsx'},
      {'conditions_file': '23.xlsx'},
      {'conditions_file': '24.xlsx'},
      {'conditions_file': '25.xlsx'},
      {'conditions_file': '26.xlsx'},
      {'conditions_file': '27.xlsx'},
      {'conditions_file': '28.xlsx'},
      {'conditions_file': '29.xlsx'},
      {'conditions_file': '30.xlsx'},
      {'conditions_file': '31.xlsx'},
      {'conditions_file': '32.xlsx'},
      {'conditions_file': '33.xlsx'},
      {'conditions_file': '34.xlsx'},
      {'conditions_file': '35.xlsx'},
      {'conditions_file': '36.xlsx'},
      {'conditions_file': '37.xlsx'},
      {'conditions_file': '38.xlsx'},
      {'conditions_file': '39.xlsx'}]
    Routine blank200
    LoopInitiator show_images_loop loopType="TrialHandler"
      Selected rows = 0:6
      conditionsFile = $conditions_file
      loopType = random
      nReps = 1
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      Routine show_images
    LoopTerminator show_images_loop
    Routine instructions_calculation
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = $conditions_file
      loopType = sequential
      nReps = 1
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      Routine text_Prompt
      Routine trial
      Routine blank500ms
    LoopTerminator trials_loop
    Routine real_test
    Routine accuracy_resett
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:6
      conditionsFile = reps.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'sound_rep': 1, 'dist_rep': 0, 'base_rep': 0},
        {'sound_rep': 0, 'dist_rep': 0, 'base_rep': 1},
        {'sound_rep': 1, 'dist_rep': 0, 'base_rep': 0},
        {'sound_rep': 0, 'dist_rep': 1, 'base_rep': 0},
        {'sound_rep': 0, 'dist_rep': 1, 'base_rep': 0},
        {'sound_rep': 0, 'dist_rep': 0, 'base_rep': 1}]
      LoopInitiator visual_distrac loopType="TrialHandler"
        Selected rows = $row_index
        conditionsFile = $conditions_file
        loopType = sequential
        nReps = dist_reps
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        Routine dist_imgs
        Routine ret_dist_test
        Routine dist_feedback
        Routine dist_test
        Routine dist_real_feedback
      LoopTerminator visual_distrac
      LoopInitiator bases loopType="TrialHandler"
        Selected rows = $row_index
        conditionsFile = $conditions_file
        loopType = sequential
        nReps = base_reps
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        Routine baseline
        Routine baseline_ret_test
        Routine feedback_baseline
      LoopTerminator bases
    LoopTerminator trials
    Routine ITI
    Routine blocking
  LoopTerminator experimental_block
